private function A_UserInput(  ) void ;
private function B_Arrays(  ) void ;
private function C_LabwareGeneration(  ) void ;
private function D_LoadInstructions(  ) void ;
private function E_WorklistCrunching(  ) void ;
private function F_PipettingSteps(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
}

private function A_UserInput(  ) void {
  private dialog customDialog_1;
  private variable rtnValue;
  private dialog customDialog_2;
  private variable o_strLabware_Dilution;
  private variable o_strLabware_Dest;
  private variable _intIndex_Dilution;
  private variable _intIndex_Diluent;
  private variable _intIndex_Dest;
  private variable _blnBindVisible;
  private variable _rtnValue;
  private variable o_strLabware_Waste;
  private variable o_strLabware_Src;
  private variable _intIndex_Src;
  private variable o_arrPossibleLabware_Dest[];
  private variable o_arrPossibleLabware_Dilution[];
  private variable o_arrPossibleLabware_Src[];
  private variable o_arrPossibleLabware_Diluent[];
  customDialog_1.InitCustomDialog("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");
  customDialog_1.ShowCustomDialog();
  rtnValue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
  strWorklistFilePath = customDialog_1.GetCustomDialogProperty( "path1.Path" );
  if (rtnValue == 2)
  {
    abort;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Worklist Path: "), strWorklistFilePath);
  customDialog_2.InitCustomDialog("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");
  customDialog_2.SetCustomDialogArrayProperty( "comboBox_Src.ItemsSource", o_arrPossibleLabware_Src );
  customDialog_2.SetCustomDialogArrayProperty( "comboBox_Dilution.ItemsSource", o_arrPossibleLabware_Dilution );
  customDialog_2.SetCustomDialogArrayProperty( "comboBox_Dest.ItemsSource", o_arrPossibleLabware_Dest );
  customDialog_2.SetCustomDialogArrayProperty( "comboBox_Diluent.ItemsSource", o_arrPossibleLabware_Diluent );
  customDialog_2.SetCustomDialogProperty( "comboBox_Src.SelectedIndex", _intIndex_Src );
  customDialog_2.SetCustomDialogProperty( "comboBox_Dilution.IsEnabled", _blnBindVisible );
  customDialog_2.SetCustomDialogProperty( "comboBox_Dilution.SelectedIndex", _intIndex_Dilution );
  customDialog_2.SetCustomDialogProperty( "comboBox_Dest.SelectedIndex", _intIndex_Dest );
  customDialog_2.SetCustomDialogProperty( "comboBox_Diluent.SelectedIndex", _intIndex_Diluent );
  customDialog_2.SetCustomDialogProperty( "image_Diluent.Source", o_strLabware_Waste );
  customDialog_2.SetCustomDialogProperty( "image_Dest.Source", o_strLabware_Dest );
  customDialog_2.SetCustomDialogProperty( "image_Dilution.Source", o_strLabware_Dilution );
  customDialog_2.SetCustomDialogProperty( "image_Dilution.IsVisible", _blnBindVisible );
  customDialog_2.SetCustomDialogProperty( "image_Src.Source", o_strLabware_Src );
  customDialog_2.ShowCustomDialog();
  _rtnValue = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
  _intIndex_Src = customDialog_2.GetCustomDialogProperty( "comboBox_Src.SelectedIndex" );
  _intIndex_Dilution = customDialog_2.GetCustomDialogProperty( "comboBox_Dilution.SelectedIndex" );
  _intIndex_Dest = customDialog_2.GetCustomDialogProperty( "comboBox_Dest.SelectedIndex" );
  _intIndex_Diluent = customDialog_2.GetCustomDialogProperty( "comboBox_Diluent.SelectedIndex" );
  if (rtnValue == 2)
  {
    abort;
  }
}

private function F_PipettingSteps(  ) void {
  private variable loopCounter1;
  private variable intNumberOfChannels;
  private variable intNumberOfTransfers;
  private variable fltNumberOfLoops;
  private variable intIndex;
  private variable strLC_10;
  private variable intModulusCP;
  private variable strCP;
  private variable intNumberOfLoops;
  private variable strCP_1000;
  private variable strLC_1000;
  private variable strLC_300;
  private variable strCP_50;
  private variable loopCounter2;
  private variable loopCounter3;
  private variable loopCounter4;
  private variable strCP_10;
  private variable strCP_Eject;
  private variable strLC_50;
  private variable strCP_300;
  private variable arrLiquidClasses_Previous[];
  private variable arrLiquidClasses[];
  private variable intPipettingIndex;
  MECC::TraceComment(Translate("###################################\n                 PIPETTING STEPS: START\n###################################"));
  intNumberOfChannels = DevGetCfgValueWithKey(ML_STAR, 1);
  strLC_10 = Translate("LowVolumeFilter_96COREHead_Water_DispenseSurface_Empty");
  strLC_50 = Translate("10X_50F_RSB_JetEmpty");
  strLC_300 = Translate("StandardVolumeFilter_96COREHead_Water_DispenseSurface_Empty");
  strLC_1000 = Translate("HighVolumeFilter_Water_DispenseJet_Empty");
  MECC::TraceComment(Translate("===== Diluent Transfers ====="));
  intPipettingIndex = 1;
  intIndex = 1;
  intIndex = 1;
  intNumberOfTransfers=arrTransferVolumes_Diluent.GetSize();
  arrLiquidClasses.SetSize(intNumberOfChannels);
  arrLiquidClasses_Previous.SetSize(intNumberOfChannels);
  {
    for(loopCounter2 = 0; loopCounter2 < intNumberOfChannels;)
    {
      loopCounter2 = loopCounter2 + 1;
      arrLiquidClasses_Previous.SetAt(loopCounter2-1, Translate("temp"));
    }
  }
  fltNumberOfLoops = intNumberOfTransfers / (intNumberOfChannels * 1.0);
  intNumberOfLoops = MthCeiling(fltNumberOfLoops);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Number of loops: "), intNumberOfLoops);
  intModulusCP = intNumberOfTransfers % intNumberOfChannels;
  intModulusCP = intNumberOfChannels - intModulusCP;
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Modulus CP: "), intModulusCP);
  {
    for(loopCounter1 = 0; loopCounter1 < intNumberOfLoops;)
    {
      loopCounter1 = loopCounter1 + 1;
      strCP = Translate("");
      strCP_Eject = Translate("");
      strCP_10 = Translate("");
      strCP_50 = Translate("");
      strCP_300 = Translate("");
      strCP_1000 = Translate("");
      {
        for(loopCounter3 = 0; loopCounter3 < intNumberOfChannels;)
        {
          loopCounter3 = loopCounter3 + 1;
          if (intIndex <= intNumberOfTransfers)
          {
            strCP = strCP + Translate("1");
            if (arrTransferVolumes_Diluent.ElementAt( intIndex -1) <= 10)
            {
              arrLiquidClasses.SetAt(loopCounter3-1, strLC_10);
              if (strLC_10 == arrLiquidClasses_Previous.ElementAt( loopCounter3 -1))
              {
                strCP_10 = strCP_10 + Translate("0");
                strCP_Eject = strCP_Eject + Translate("0");
              }
              else
              {
                strCP_10 = strCP_10 + Translate("1");
                strCP_Eject = strCP_Eject + Translate("1");
              }
              strCP_50 = strCP_50 + Translate("0");
              strCP_300 = strCP_300 + Translate("0");
              strCP_1000 = strCP_1000 + Translate("0");
            }
            else
            {
              if (arrTransferVolumes_Diluent.ElementAt( intIndex -1) <= 50)
              {
                arrLiquidClasses.SetAt(loopCounter3-1, strLC_50);
                if (strLC_50 == arrLiquidClasses_Previous.ElementAt( loopCounter3 -1))
                {
                  strCP_50 = strCP_50 + Translate("0");
                  strCP_Eject = strCP_Eject + Translate("0");
                }
                else
                {
                  strCP_50 = strCP_50 + Translate("1");
                  strCP_Eject = strCP_Eject + Translate("1");
                }
                strCP_10 = strCP_10 + Translate("0");
                strCP_300 = strCP_300 + Translate("0");
                strCP_1000 = strCP_1000 + Translate("0");
              }
              else
              {
                if (arrTransferVolumes_Diluent.ElementAt( intIndex -1) <= 300)
                {
                  arrLiquidClasses.SetAt(loopCounter3-1, strLC_300);
                  if (strLC_300 == arrLiquidClasses_Previous.ElementAt( loopCounter3 -1))
                  {
                    strCP_300 = strCP_300 + Translate("0");
                    strCP_Eject = strCP_Eject + Translate("0");
                  }
                  else
                  {
                    strCP_300 = strCP_300 + Translate("1");
                    strCP_Eject = strCP_Eject + Translate("1");
                  }
                  strCP_10 = strCP_10 + Translate("0");
                  strCP_50 = strCP_50 + Translate("0");
                  strCP_1000 = strCP_1000 + Translate("0");
                }
                else
                {
                  if (arrTransferVolumes_Diluent.ElementAt( intIndex -1) <= 1000)
                  {
                    arrLiquidClasses.SetAt(loopCounter3-1, strLC_1000);
                    if (strLC_1000 == arrLiquidClasses_Previous.ElementAt( loopCounter3 -1))
                    {
                      strCP_1000 = strCP_1000 + Translate("0");
                      strCP_Eject = strCP_Eject + Translate("0");
                    }
                    else
                    {
                      strCP_1000 = strCP_1000 + Translate("1");
                      strCP_Eject = strCP_Eject + Translate("1");
                    }
                    strCP_10 = strCP_10 + Translate("0");
                    strCP_50 = strCP_50 + Translate("0");
                    strCP_300 = strCP_300 + Translate("0");
                  }
                }
              }
            }
            intIndex = intIndex + 1;
          }
          else
          {
            MECC::TraceComment(Translate("----- Completed all transfers -----"));
            {
              for(loopCounter4 = 0; loopCounter4 < intNumberOfChannels;)
              {
                loopCounter4 = loopCounter4 + 1;
                strCP = strCP + Translate("0");
                strCP_10 = strCP_10 + Translate("0");
                strCP_50 = strCP_50 + Translate("0");
                strCP_300 = strCP_300 + Translate("0");
                strCP_1000 = strCP_1000 + Translate("0");
                strCP_Eject = strCP_Eject + Translate("0");
              }
            }
            break;
          }
        }
      }
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Channel Pattern: "), strCP);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Channel Pattern - 10uL: "), strCP_10);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Channel Pattern - 50uL: "), strCP_50);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Channel Pattern - 300uL: "), strCP_300);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Channel Pattern - 1000uL: "), strCP_1000);
      MECC::TraceComment(Translate("===== Get Tips ====="));
      if (loopCounter1 != 1)
      {
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      MECC::TraceComment(Translate("===== Pipetting Steps ====="));
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      MECC::TraceComment(Translate("----- Loop WrapUp -----"));
      intPipettingIndex = intPipettingIndex + intNumberOfChannels;
      arrLiquidClasses_Previous=arrLiquidClasses;
    }
  }
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  MECC::TraceComment(Translate("===== Sample Transfers ====="));
  intPipettingIndex = 1;
  intIndex = 1;
  intIndex = 1;
  intNumberOfTransfers=arrTransferVolumes_Sample.GetSize();
  arrLiquidClasses.SetSize(intNumberOfChannels);
  arrLiquidClasses_Previous.SetSize(intNumberOfChannels);
  {
    for(loopCounter2 = 0; loopCounter2 < intNumberOfChannels;)
    {
      loopCounter2 = loopCounter2 + 1;
      arrLiquidClasses_Previous.SetAt(loopCounter2-1, Translate("temp"));
    }
  }
  fltNumberOfLoops = intNumberOfTransfers / (intNumberOfChannels * 1.0);
  intNumberOfLoops = MthCeiling(fltNumberOfLoops);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Number of loops: "), intNumberOfLoops);
  intModulusCP = intNumberOfTransfers % intNumberOfChannels;
  intModulusCP = intNumberOfChannels - intModulusCP;
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Modulus CP: "), intModulusCP);
  {
    for(loopCounter1 = 0; loopCounter1 < intNumberOfLoops;)
    {
      loopCounter1 = loopCounter1 + 1;
      strCP = Translate("");
      strCP_10 = Translate("");
      strCP_50 = Translate("");
      strCP_300 = Translate("");
      strCP_1000 = Translate("");
      {
        for(loopCounter3 = 0; loopCounter3 < intNumberOfChannels;)
        {
          loopCounter3 = loopCounter3 + 1;
          if (intIndex <= intNumberOfTransfers)
          {
            strCP = strCP + Translate("1");
            if (arrTransferVolumes_Sample.ElementAt( intIndex -1) <= 10)
            {
              arrLiquidClasses.SetAt(loopCounter3-1, strLC_10);
              if (strLC_10 == arrLiquidClasses_Previous.ElementAt( loopCounter3 -1))
              {
                strCP_10 = strCP_10 + Translate("0");
              }
              else
              {
                strCP_10 = strCP_10 + Translate("1");
              }
              strCP_50 = strCP_50 + Translate("0");
              strCP_300 = strCP_300 + Translate("0");
              strCP_1000 = strCP_1000 + Translate("0");
            }
            else
            {
              if (arrTransferVolumes_Sample.ElementAt( intIndex -1) <= 50)
              {
                arrLiquidClasses.SetAt(loopCounter3-1, strLC_50);
                if (strLC_50 == arrLiquidClasses_Previous.ElementAt( loopCounter3 -1))
                {
                  strCP_50 = strCP_50 + Translate("0");
                }
                else
                {
                  strCP_50 = strCP_50 + Translate("1");
                }
                strCP_10 = strCP_10 + Translate("0");
                strCP_300 = strCP_300 + Translate("0");
                strCP_1000 = strCP_1000 + Translate("0");
              }
              else
              {
                if (arrTransferVolumes_Sample.ElementAt( intIndex -1) <= 300)
                {
                  arrLiquidClasses.SetAt(loopCounter3-1, strLC_300);
                  if (strLC_300 == arrLiquidClasses_Previous.ElementAt( loopCounter3 -1))
                  {
                    strCP_300 = strCP_300 + Translate("0");
                  }
                  else
                  {
                    strCP_300 = strCP_300 + Translate("1");
                  }
                  strCP_10 = strCP_10 + Translate("0");
                  strCP_50 = strCP_50 + Translate("0");
                  strCP_1000 = strCP_1000 + Translate("0");
                }
                else
                {
                  if (arrTransferVolumes_Sample.ElementAt( intIndex -1) <= 1000)
                  {
                    arrLiquidClasses.SetAt(loopCounter3-1, strLC_1000);
                    if (strLC_1000 == arrLiquidClasses_Previous.ElementAt( loopCounter3 -1))
                    {
                      strCP_1000 = strCP_1000 + Translate("0");
                    }
                    else
                    {
                      strCP_1000 = strCP_1000 + Translate("1");
                    }
                    strCP_10 = strCP_10 + Translate("0");
                    strCP_50 = strCP_50 + Translate("0");
                    strCP_300 = strCP_300 + Translate("0");
                  }
                }
              }
            }
            intIndex = intIndex + 1;
          }
          else
          {
            MECC::TraceComment(Translate("----- Completed all transfers -----"));
            {
              for(loopCounter4 = 0; loopCounter4 < intNumberOfChannels;)
              {
                loopCounter4 = loopCounter4 + 1;
                strCP = strCP + Translate("0");
                strCP_10 = strCP_10 + Translate("0");
                strCP_50 = strCP_50 + Translate("0");
                strCP_300 = strCP_300 + Translate("0");
                strCP_1000 = strCP_1000 + Translate("0");
              }
            }
            break;
          }
        }
      }
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Channel Pattern: "), strCP);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Channel Pattern - 10uL: "), strCP_10);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Channel Pattern - 50uL: "), strCP_50);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Channel Pattern - 300uL: "), strCP_300);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Channel Pattern - 1000uL: "), strCP_1000);
      MECC::TraceComment(Translate("===== Get Tips ====="));
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      MECC::TraceComment(Translate("===== Pipetting Steps ====="));
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      MECC::TraceComment(Translate("----- Loop WrapUp -----"));
      intPipettingIndex = intPipettingIndex + intNumberOfChannels;
    }
  }
  MECC::TraceComment(Translate("###################################\n                 PIPETTING STEPS: END\n###################################"));
}

private function E_WorklistCrunching(  ) void {
  private variable intTotalTransfers;
  private variable loopCounter1;
  private variable strSourceBC;
  private variable strSrcLabwareID;
  private variable intSrcBCPos;
  private variable intDestBCPos;
  private variable strDestinationBC;
  private variable strDestLabwareId;
  private variable loopCounter2;
  intTotalTransfers=arrVolumes_Sample.GetSize();
  SeqRemoveAll(seqSource_Sample);
  SeqRemoveAll(seqDestination_Sample);
  SeqRemoveAll(seqDestination_Diluent);
  arrTransferVolumes_Sample.SetSize(0);
  {
    for(loopCounter1 = 0; loopCounter1 < intTotalTransfers;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (arrVolumes_Sample.ElementAt( loopCounter1 -1) != 0)
      {
        arrTransferVolumes_Sample.AddAsLast(arrVolumes_Sample.ElementAt( loopCounter1 -1));
        strSourceBC=arrSourceBarcodes.GetAt(loopCounter1-1);
        intSrcBCPos = LOOKUP::Lookup(arrSourceBarcodes_Unique, strSourceBC);
        strSrcLabwareID=arrSourceLabwareIDs.GetAt(intSrcBCPos-1);
        SeqAdd(seqSource_Sample, strSrcLabwareID, arrSourceWells.ElementAt( loopCounter1 -1));
        strDestinationBC=arrDestinationBarcodes.GetAt(loopCounter1-1);
        intDestBCPos = LOOKUP::Lookup(arrDestinationBarcodes_Unique, strDestinationBC);
        strDestLabwareId=arrDestinationLabwareIDs.GetAt(intDestBCPos-1);
        SeqAdd(seqDestination_Sample, strDestLabwareId, arrDestinationWells.ElementAt( loopCounter1 -1));
      }
    }
  }
  Util2::Debug::TraceSequencesAndData_1(Translate("Sample Sequences"), seqSource_Sample, seqDestination_Sample, arrTransferVolumes_Sample);
  arrTransferVolumes_Diluent.SetSize(0);
  {
    for(loopCounter2 = 0; loopCounter2 < intTotalTransfers;)
    {
      loopCounter2 = loopCounter2 + 1;
      if (arrVolumes_Diluent.ElementAt( loopCounter2 -1) > 0)
      {
        arrTransferVolumes_Diluent.AddAsLast(arrVolumes_Diluent.ElementAt( loopCounter2 -1));
        strDestinationBC=arrDestinationBarcodes.GetAt(loopCounter2-1);
        intDestBCPos = LOOKUP::Lookup(arrDestinationBarcodes_Unique, strDestinationBC);
        strDestLabwareId=arrDestinationLabwareIDs.GetAt(intDestBCPos-1);
        SeqAdd(seqDestination_Diluent, strDestLabwareId, arrDestinationWells.ElementAt( loopCounter2 -1));
      }
    }
  }
  Util2::Debug::TraceSequenceAndData_1(Translate("Diluent Sequences"), seqDestination_Diluent, arrTransferVolumes_Diluent);
  OPT_ORDER::OptChannels_AspDispVol(seqDestination_Sample, seqSource_Sample, arrTransferVolumes_Sample, ML_STAR);
  OPT_ORDER::OptChannels_PosVol(seqDestination_Diluent, arrTransferVolumes_Diluent, ML_STAR);
}

private function B_Arrays(  ) void {
  private variable loopCounter1;
  private variable strWorklist_DestBC;
  private variable strWorklist_DestWell;
  private variable strWorklist_VolDil;
  private variable strWorklist_SrcWell;
  private variable strWorklist_SrcBC;
  private variable strWorklist_VolSam;
  private file hndWorklist;
  private variable intMaxSourcePlateNumber;
  private variable intMaxDestinationPlateNumber;
  private variable __[];
  private variable fltWorklist_VolDil;
  private variable fltWorklist_VolSam;
  intMaxSourcePlateNumber = 3;
  intMaxDestinationPlateNumber = 3;
  arrSourceBarcodes.SetSize(0);
  arrSourceWells.SetSize(0);
  arrDestinationBarcodes.SetSize(0);
  arrDestinationWells.SetSize(0);
  arrVolumes_Sample.SetSize(0);
  arrVolumes_Diluent.SetSize(0);
  hndWorklist.AddField("Source Label", strWorklist_SrcBC, hslString, 255);
  hndWorklist.AddField("Source Position", strWorklist_SrcWell, hslString, 255);
  hndWorklist.AddField("Destination Label", strWorklist_DestBC, hslString, 255);
  hndWorklist.AddField("Destination Position", strWorklist_DestWell, hslString, 255);
  hndWorklist.AddField("Sample Volume", strWorklist_VolSam, hslString, 255);
  hndWorklist.AddField("Diluent Volume", strWorklist_VolDil, hslString, 255);
  hndWorklist.SetDelimiter(hslCSVDelimited);
  if( 0 == hndWorklist.Open(strWorklistFilePath, hslAppend) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strWorklistFilePath, "HxMetEdCompCmd");
  }
  {
    loopCounter1 = 0;
    while (
       (hndWorklist.Eof() == 0)
    )
    {
      loopCounter1 = loopCounter1 + 1;
      if( 0 == hndWorklist.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      WELL_FORMAT::A01_to_A1(strWorklist_SrcWell);
      WELL_FORMAT::A01_to_A1(strWorklist_DestWell);
      fltWorklist_VolSam = StrFVal(strWorklist_VolSam);
      fltWorklist_VolDil = StrFVal(strWorklist_VolDil);
      arrSourceBarcodes.AddAsLast(strWorklist_SrcBC);
      arrSourceWells.AddAsLast(strWorklist_SrcWell);
      arrDestinationBarcodes.AddAsLast(strWorklist_DestBC);
      arrDestinationWells.AddAsLast(strWorklist_DestWell);
      arrVolumes_Sample.AddAsLast(fltWorklist_VolSam);
      arrVolumes_Diluent.AddAsLast(fltWorklist_VolDil);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Line Count: "), loopCounter1);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strWorklist_SrcBC: "), strWorklist_SrcBC);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strWorklist_SrcWell: "), strWorklist_SrcWell);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strWorklist_DestBC: "), strWorklist_DestBC);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strWorklist_DestWell: "), strWorklist_DestWell);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strWorklist_VolSam: "), strWorklist_VolSam);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strWorklist_VolDil: "), strWorklist_VolDil);
    }
  }
  if( 0 != hndWorklist.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  hndWorklist.RemoveFields();
  TRACEARRAY::TraceArray(Translate("Full Worklist"), arrSourceBarcodes, arrSourceWells, arrDestinationBarcodes, arrDestinationWells, arrVolumes_Sample, arrVolumes_Diluent, __, __, __, __, __, __, __, __, __, __);
  arrSourceBarcodes_Unique.SetSize(0);
  arrDestinationBarcodes_Unique.SetSize(0);
  UNIQUE_MEMBERS::Unique_members(arrSourceBarcodes, arrSourceBarcodes_Unique, 0);
  intNumberOfSourceBarcodes=arrSourceBarcodes_Unique.GetSize();
  if (intNumberOfSourceBarcodes > intMaxSourcePlateNumber)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Worklist contains too many source plates for this method"), Translate(""));
    abort;
  }
  TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate(">> Unique Source Barcodes"), arrSourceBarcodes_Unique);
  UNIQUE_MEMBERS::Unique_members(arrDestinationBarcodes, arrDestinationBarcodes_Unique, 0);
  intNumberOfDestinationBarcodes=arrDestinationBarcodes_Unique.GetSize();
  if (intNumberOfDestinationBarcodes > intMaxDestinationPlateNumber)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Worklist contains too many destination plates for this method"), Translate(""));
    abort;
  }
  TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate(">> Unique Destination Barcodes"), arrDestinationBarcodes_Unique);
}

private function C_LabwareGeneration(  ) void {
  private variable strDestinationLabware_Prefix;
  private variable strSourceLabware_Prefix;
  private variable loopCounter1;
  private variable loopCounter2;
  private variable strDestinationLabware;
  private variable strSourceLabware;
  private variable strDiluentLabware;
  strSourceLabware_Prefix = Translate("Eppendorf_96w_PCR");
  strDestinationLabware_Prefix = Translate("Cos_96_Rd");
  strDiluentLabware = Translate("");
  arrSourceLabwareIDs.SetSize(0);
  arrDestinationLabwareIDs.SetSize(0);
  {
    for(loopCounter1 = 0; loopCounter1 < intNumberOfSourceBarcodes;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 < 10)
      {
        strSourceLabware = StrConcat4(strSourceLabware_Prefix, Translate("_000"), loopCounter1, Translate(""));
      }
      else
      {
        strSourceLabware = StrConcat4(strSourceLabware_Prefix, Translate("_00"), loopCounter1, Translate(""));
      }
      arrSourceLabwareIDs.AddAsLast(strSourceLabware);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strSourceLabware: "), strSourceLabware);
    }
  }
  {
    for(loopCounter2 = 0; loopCounter2 < intNumberOfDestinationBarcodes;)
    {
      loopCounter2 = loopCounter2 + 1;
      if (loopCounter2 < 10)
      {
        strDestinationLabware = StrConcat4(strDestinationLabware_Prefix, Translate("_000"), loopCounter2, Translate(""));
      }
      else
      {
        strDestinationLabware = StrConcat4(strDestinationLabware_Prefix, Translate("_00"), loopCounter2, Translate(""));
      }
      arrDestinationLabwareIDs.AddAsLast(strDestinationLabware);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strDestinationLabware: "), strDestinationLabware);
    }
  }
  TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("Source Labware"), arrSourceLabwareIDs);
  TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("Destination Labware"), arrDestinationLabwareIDs);
}

private function D_LoadInstructions(  ) void {
  private variable intLoadSeqCap_Src;
  private variable intLoadSeqCap_Dest;
  private variable intTotalTransfers;
  private variable intTipUse_50;
  private variable intTipUse_10;
  private variable intTotalTransfers_Dil;
  private variable loopCounter1;
  private variable intTotalTransfers_Sample;
  private variable intTipUse_1000;
  private variable intTipUse_300;
  MECC::TraceComment(Translate("###################################\n            LOAD INSTRUCTIONS: START\n###################################"));
  intLoadSeqCap_Src = 96 * intNumberOfSourceBarcodes;
  ML_STAR.core384slidewaste_0001.SetCount(intLoadSeqCap_Src);
  intLoadSeqCap_Dest = 96 * intNumberOfDestinationBarcodes;
  ML_STAR.core384slidewaste_0001.SetCount(intLoadSeqCap_Dest);
  intTipUse_10 = 0;
  intTipUse_50 = 0;
  intTipUse_300 = 0;
  intTipUse_1000 = 0;
  intTotalTransfers_Sample=arrVolumes_Sample.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < intTotalTransfers_Sample;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (arrVolumes_Sample.ElementAt( loopCounter1 -1) <= 10)
      {
        intTipUse_10 = intTipUse_10 + 1;
      }
      else
      {
        if (arrVolumes_Sample.ElementAt( loopCounter1 -1) <= 50)
        {
          intTipUse_50 = intTipUse_50 + 1;
        }
        else
        {
          if (arrVolumes_Sample.ElementAt( loopCounter1 -1) <= 300)
          {
            intTipUse_300 = intTipUse_300 + 1;
          }
          else
          {
            if (arrVolumes_Sample.ElementAt( loopCounter1 -1) <= 1000)
            {
              intTipUse_1000 = intTipUse_1000 + 1;
            }
          }
        }
      }
    }
  }
  intTotalTransfers_Dil=arrVolumes_Diluent.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < intTotalTransfers_Dil;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (arrVolumes_Sample.ElementAt( loopCounter1 -1) <= 10)
      {
        if (intTipUse_10 < 8)
        {
          intTipUse_10 = intTipUse_10 + 1;
        }
      }
      else
      {
        if (arrVolumes_Sample.ElementAt( loopCounter1 -1) <= 50)
        {
          if (intTipUse_50 < 8)
          {
            intTipUse_50 = intTipUse_50 + 1;
          }
        }
        else
        {
          if (arrVolumes_Sample.ElementAt( loopCounter1 -1) <= 300)
          {
            if (intTipUse_300 < 8)
            {
              intTipUse_300 = intTipUse_300 + 1;
            }
          }
          else
          {
            if (arrVolumes_Sample.ElementAt( loopCounter1 -1) <= 1000)
            {
              if (intTipUse_1000 < 8)
              {
                intTipUse_1000 = intTipUse_1000 + 1;
              }
            }
          }
        }
      }
    }
  }
  MECC::TraceComment(Translate("###################################\n            LOAD INSTRUCTIONS: END\n###################################"));
}
